PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = PFE
  eyetracker = MouseGaze
  keyboardBackend = ioHub
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine trial
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (1, 1)
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerCalibrationRoutine calibration_2
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerCalibrationRoutine calibration_1
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration_1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('videos', 'ball-elongated-1.avi')]),
      OrderedDict([('videos', 'ball-elongated-2.avi')]),
      OrderedDict([('videos', 'ball-original.avi')]),
      OrderedDict([('videos', 'ball-swept_volume.avi')]),
      OrderedDict([('videos', 'spot-elongated-1.avi')]),
      OrderedDict([('videos', 'spot-elongated-2.avi')]),
      OrderedDict([('videos', 'spot-original.avi')]),
      OrderedDict([('videos', 'spot-swept.avi')])]
    Routine trial
  LoopTerminator trials
